/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "chatty": true
    ,
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-28007.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-27374.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-28247.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-22723.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "configure-parameter": {
                "scale": 0.4
            }
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "configure-parameter": {
                "scale":0.4
            }
        }
    ]
}
